<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Connection>UdpConfiguration</osc:Connection>
        <osc:Address>/test</osc:Address>
        <osc:TypeTag />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
          <p1:NumBuffers>10</p1:NumBuffers>
          <p1:GrabMode>BufferFrames</p1:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>D:\Harshavardan\data\video.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>100</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Smooth">
                <cv:SmoothType>Median</cv:SmoothType>
                <cv:Size1>3</cv:Size1>
                <cv:Size2>1</cv:Size2>
                <cv:Sigma1>0</cv:Sigma1>
                <cv:Sigma2>0</cv:Sigma2>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>10</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Harshavardan\data\rawmotion.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Harshavardan\data\timestamp.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GpioPinState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val2</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Harshavardan\data\us.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val3</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Harshavardan\data\cs.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>